PsychoPy2experiment version="3.2.4"
Settings
  Experiment info = {'Participant': '000'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = pix
  Window size (pixels) = [1440, 900]
  color = black
  expName = Auditory_oddball
  logging level = warning
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Routines
  Routine trial
    SoundComponent stimulus
      durationEstim = $Duration/1000
      sound = A
      startVal [time (s)] = $randint(950,1050)/1000
      stopVal [duration (s)] = $Duration/1000
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    SoundComponent sound_1
      durationEstim = $Duration/1000
      sound = A
      startVal [time (s)] = $(Duration/1000) + 2*randint(950,1050)/1000 
      stopVal [duration (s)] = $Duration/1000
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    SoundComponent sound_2
      durationEstim = $Duration/1000
      sound = A
      startVal [time (s)] = $(2*Duration /1000) + 3*randint(950,1050)/1000
      stopVal [duration (s)] = $Duration/1000
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    SoundComponent sound_3
      durationEstim = $Duration/1000
      sound [set every repeat] = $FileName
      startVal [time (s)] = $3*Duration/1000 + 4*randint(950,1050)/1000
      stopVal [duration (s)] = $Duration/1000
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    TextComponent text
      letterHeight = 0.1
      startVal [time (s)] = $4*Duration/1000 + 5*randint(950,1050)/1000
      text = Press the SPACE twice (once to mark the start, and the other to mark the end) of the experienced duration
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    CodeComponent code
      Code Type = Py
      Begin Experiment:
        from psychopy.iohub import launchHubServer
        from psychopy.core import getTime

        # Start the ioHub process. 'io' can now be used during the
        # experiment to access iohub devices and read iohub device events.
        io = launchHubServer()

        keyboard = io.devices.keyboard
      Begin Routine:
        # Each routine
        space = False  # Has space been pushed?
        spaceRT = ''  # variable for holding RT
        spaceClock = clock.Clock()  # Clock for space bar
      Each Frame:
        # Each Frame
        loop=True
        while loop:
            presses = keyboard.KeyboardPress().char()
            if 'space' in presses:
                spaceRT = keyboard.KeyboardRelease().duration()
                loop=False

        if spaceRT:
            passon = True
        else:
            passon = False
      End Experiment:
        io.quit()
      End Routine:
        # End routine
        thisExp.addData('space.rt', spaceRT)


        text_2.setText(spaceRT)
        win.flip()
    TextComponent text_2
      letterHeight = 0.1
      startVal [condition] = $passon == 'True'
      stopVal [duration (s)] = 1.0
      text = $spaceRT
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  Routine instruct
    TextComponent instrText
      color = $[1, 1, 1]
      letterHeight = 50
      startVal [time (s)] = 0
      units = pix
      wrapWidth = 800
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      text:
        OK. Ready?

        Remember:
        1) Stay fixated on the central white dot.
        2) Ignore the word itself; press:
         - Left for red LETTERS
         - Down for green LETTERS
         - Right for blue LETTERS
         - (Esc will quit)
        3) To toggle gaze position visibility, press 'g'.

        Press any key to continue
    KeyboardComponent ready
      correctAns = thisTrial.corrAns
      forceEndRoutine = True
      startVal [time (s)] = 0
      store = nothing
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  Routine thanks
    TextComponent thanksText
      color = $[1, 1, 1]
      font = arial
      letterHeight = 50
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
      units = pix
      wrapWidth = 800
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      text:
        This is the end of the experiment.

        Thanks!
Flow
  Routine instruct
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = conditionData.csv
    endPoints = [1, 2]
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('Duration', 825), ('Type', 1), ('FileName', './sounds/oddBall1.wav')]),
      OrderedDict([('Duration', 1525), ('Type', 0), ('FileName', './sounds/Standard tone.wav')]),
      OrderedDict([('Duration', 1125), ('Type', 1), ('FileName', './sounds/oddBall1.wav')]),
      OrderedDict([('Duration', 1525), ('Type', 0), ('FileName', './sounds/Standard tone.wav')]),
      OrderedDict([('Duration', 750), ('Type', 0), ('FileName', './sounds/Standard tone.wav')]),
      OrderedDict([('Duration', 1375), ('Type', 0), ('FileName', './sounds/Standard tone.wav')]),
      OrderedDict([('Duration', 1050), ('Type', 2), ('FileName', './sounds/1050.wav')]),
      OrderedDict([('Duration', 900), ('Type', 0), ('FileName', './sounds/Standard tone.wav')]),
      OrderedDict([('Duration', 975), ('Type', 0), ('FileName', './sounds/Standard tone.wav')]),
      OrderedDict([('Duration', 1250), ('Type', 0), ('FileName', './sounds/Standard tone.wav')]),
      OrderedDict([('Duration', 1375), ('Type', 0), ('FileName', './sounds/Standard tone.wav')]),
      OrderedDict([('Duration', 1375), ('Type', 1), ('FileName', './sounds/oddBall1.wav')]),
      OrderedDict([('Duration', 1525), ('Type', 1), ('FileName', './sounds/oddBall1.wav')]),
      OrderedDict([('Duration', 1250), ('Type', 0), ('FileName', './sounds/Standard tone.wav')]),
      OrderedDict([('Duration', 1450), ('Type', 2), ('FileName', './sounds/1450.wav')]),
      OrderedDict([('Duration', 900), ('Type', 2), ('FileName', './sounds/900.wav')]),
      OrderedDict([('Duration', 1250), ('Type', 2), ('FileName', './sounds/1250.wav')])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
    Routine trial
  LoopTerminator trials
  Routine thanks
